PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = demo
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Routines
  Routine trial
    TextComponent textFixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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    ImageComponent imageStim
      image = B1.bmp
      size = (0.20, 0.25)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.5
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    CodeComponent codeScale
      Code Type = Py
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      Before Experiment:
        rat4 = []
        rat8 = []
        rat9 = []
      Begin Routine:
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()

        if len(keys):
            if 'left' in keys:
                sliderScale.markerPos = sliderScale.markerPos - 1
                sliderScale.rating = sliderScale.rating - 1
            elif 'right' in keys:
                sliderScale.markerPos = sliderScale.markerPos + 1
                sliderScale.rating = sliderScale.rating + 1
      End Routine:
        resp = sliderScale.getRating()

        print(resp)

        if (resp):
            if resp == 4:
                rat4.append(e1)
                print(rat4)
            elif resp == 8:
                rat8.append(e1)
                print(rat8)
            elif resp == 9:
                rat9.append(e1)
                print(rat9)

        if len(rat4) >= 2 and len(rat8) >= 2 and len(rat9) >= 1:
            continueRoutine = False
            trials.finished = True
    CodeComponent codeShock
      Code Type = Py
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      Before Experiment:
        # set the parameters

        e1 = 1000
        trend = "up"

        ratCurr = 0
        ratPrev = 0

        setp2 = '$A1S;c12;w3;f100;p5000;o1;r5;i'
      Begin Routine:
        #jitter = round(random() * (2.5 - 1) + 1, 1)

        thisExp.addData("Intensity", e1)

        setp1 = str(e1)
        #print(setp2 + setp1 + ';#')
        setp3 = (setp2 + setp1 + ';#')
        ser.write(setp3.encode())
      Each Frame:
        if imageStim.status == STARTED:
         ser.write('$A1T;c12;#'.encode())
      End Routine:
        ratCurr = resp

        if abs(ratCurr - ratPrev) >= 2:
            ratio = 1.1
        elif abs(ratCurr - ratPrev) == 0:
            ratio = 1.3
        else:
            ratio = 1.2

        if ratCurr <= 3:
            trend = "up"
        elif ratCurr >= 9:
            trend = "down"

        if trend == "up":
            e1 = round(e1 * ratio)
        else:
            e1 = round(e1 / ratio)


        ratPrev = ratCurr
    SliderComponent sliderScale
      color = White
      fillColor = Yellow
      forceEndRoutine = False
      granularity = 1
      initVal = 5
      labels = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
      letterHeight = 0.05
      size = (1.5, 0.1)
      startVal [time (s)] = 3
      styles = rating
      ticks = (0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    KeyboardComponent key_resp_Scale
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine thanks
    TextComponent textEnd
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = The end!
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    CodeComponent codeOutput
      Code Type = Auto->JS
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      End Experiment:
        print("4级疼痛为：", average(rat4))
        print("8级疼痛为：", average(rat8))
  Routine instr
    TextComponent textInstr
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        电击阈限

        1000μA

        按空格继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import serial
        ser = serial.Serial('COM3', 115200)  # open serial port
        print(ser.name)         # check which port was really used
        ser.write('$A1R;c1234;#'.encode())     # write a string
        print('port opened')
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
  Routine thanks
